PsychoPy2experiment version="3.2.4"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'order': "['random', 1, 2]", 'session': '001', 'gender': "['male', 'female', 'other']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 3.2.0
  Window size (pixels) = [2560, 1440]
  color = black
  expName = IAT-1.4
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = +
      units = height
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    ImageComponent image_stim
      image [set every repeat] = $stimImage
      size = [0.5, 0.5]
      startVal [time (s)] = 0.5
      units = height
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    TextComponent text_stim
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimWord
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    MouseComponent touch_resp
      clickable = button_left, button_right
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    CodeComponent check_correct
      Code Type = Both
      End JS Routine:
        // check if correct (either mouse or keyboard)
        if (key_resp.keys !== undefined) {
            corr = key_resp.corr;
            rt = key_resp.rt;
        } else {
            rt = touch_resp.time[0];  // annoyingly mouse is a list of rts
            if ((touch_resp.clicked_name[0].includes('left') && CorrAns=='a') ||
                (touch_resp.clicked_name[0].includes('right') && CorrAns=='l')) {
                corr = 1;
            } else {
                corr = 0;
            }
        }

        psychoJS.experiment.addData('rt',  rt);
        psychoJS.experiment.addData('corr', corr);
      End Routine:
        # check if correct (either mouse or keyboard)
        if key_resp.keys:
            corr = key_resp.corr
            rt = key_resp.rt
        else:
            rt = touch_resp.time[0]  # annoyingly mouse is a list of rts
            if (('left' in touch_resp.clicked_name[0] and CorrAns=='a') or
                ('right' in touch_resp.clicked_name[0] and CorrAns=='l')):
                corr = 1
            else:
                corr = 0

        thisExp.addData('rt',  rt)
        thisExp.addData('corr', corr)
    PolygonComponent button_left
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.5
      units = height
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    TextComponent trial_label_left
      color = darkgreen
      letterHeight = 0.05
      pos = [-0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_left
      units = height
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    PolygonComponent button_right
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.5
      units = height
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    TextComponent trial_label_right
      color = darkgreen
      letterHeight = 0.05
      pos = [0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_right
      units = height
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  Routine feedback
    CodeComponent generate_msg
      Code Type = Both
      Begin JS Routine:
        if (corr==0) {
            msg="oops";
        } else {
            msg="+"
        }
      Begin Routine:
        if corr==0:
            msg="oops"
        else:
            msg="+"
    TextComponent feedback_msg
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
      units = height
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  Routine ready
    TextComponent main_ready_msg
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Take note of the categories below

        Position your index fingers

        Press the space bar (or one of the green buttons) to begin
    PolygonComponent button_L
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent ready_label_L
      color = darkgreen
      letterHeight = 0.05
      pos = [-0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_left
      units = height
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    PolygonComponent button_R
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent ready_label_R
      color = darkgreen
      letterHeight = 0.05
      pos = [0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_right
      units = height
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    MouseComponent ready_done_mouse
      clickable = button_L, button_R
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent ready_done
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_thanks
    TextComponent thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = height
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      text:
        The End.

        Thank you for your participation.
  Routine keep_in_mind
    TextComponent keep_in_mind_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Keep in mind:

        1) Labels at the top of the screen indicate which catogory goes with which key.

        2) Each word or image has a correct catogory classification

        3) Keep your index fingers on the A and L keys to enable a rapid response.

        4) The test gives no results if you go slow- please try to go as fast as possible
    KeyboardComponent keep_in_mind_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent keep_in_btn
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent keep_in_label
      color = darkgreen
      letterHeight = 0.08
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent mouse
      clickable = keep_in_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent set_block_order
      Code Type = Both
      Begin Experiment:
        if expInfo['order']=='random':
            expInfo['order'] = randint(1,2)

        blocks_file = "blocks_order{}.xlsx".format(expInfo['order'])
      Begin JS Experiment:
        if (expInfo['order']=='random') {
            expInfo['order'] = Math.floor(Math.random() * 2) + 1;
        }
        blocks_file = "blocks_order"+expInfo['order']+".xlsx"
    TextComponent instructs_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
      units = height
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    KeyboardComponent instruct_done
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent instr_done_touch
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator instruct_pages loopType="TrialHandler"
    conditionsFile = instructs.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('pageN', 1), ('instruct_text', "You will be presented with words or images to classify into categories using either the 'A' or 'L' key. \n \nTry to go as fast as possible while making as few mistakes as possible. \n")]),
      OrderedDict([('pageN', 2), ('instruct_text', 'Keep in mind: \n \n1) Labels at the top of the screen indicate which catogory goes with which key. \n \n2) Each word or image has a correct catogory classification \n \n3) Keep your index fingers on the A and L keys to enable a rapid response. \n \n4) The test gives no results if you go slow- please try to go as fast as possible \n')])]
    Routine instructions
  LoopTerminator instruct_pages
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $blocks_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine ready
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conds_file
      loopType = random
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine end_thanks
